WorkflowBuilder(Version=2.8.0-alpha018)
GroupWorkflow Initialization
    ExternalizedMapping(Path(DisplayName=SessionSettingsPath))
    -> LoadSettings(Path=sessionTemplate.yml)
    -> Take(Count=1)
    -> AsyncSubject SessionSettings

    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=Metadata.RandomSeed)
    -> PropertyMapping(Seed)
    -> Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Take(Count=1)
    -> AsyncSubject RngSeed

    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=Metadata.DefaultEncoderGain)
    -> Take(Count=1)
    -> BehaviorSubject DefaultEncoderGain

    GroupWorkflow VariableDeclaration
        BehaviorSubject<System.Boolean> WallVisibilityEvent
        BehaviorSubject<System.String> LogFrameEvent

    GroupWorkflow TrialSampling
        GroupWorkflow ListMode => #0
            SubscribeSubject SessionSettings
            -> Take(Count=1)
            -> MemberSelector(Selector=Metadata.TrialOrder)
            -> MemberSelector(Selector=Mode) => #3
            Annotation ShuffleMode(Text=ListMode) => #4
            #3, #4 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.TrialOrderMode>(Value=List))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> SelectMany GetTrials
                SubscribeSubject SessionSettings
                -> WorkflowOutput
            -> MemberSelector(Selector=Trials)
            -> WorkflowOutput
        GroupWorkflow ShuffledListMode => #1
            SubscribeSubject SessionSettings
            -> Take(Count=1)
            -> MemberSelector(Selector=Metadata.TrialOrder)
            -> MemberSelector(Selector=Mode) => #3
            Annotation ShuffleMode(Text="") => #4
            #3, #4 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.TrialOrderMode>(Value=Shuffle))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> SelectMany GetTrials => #7
                SubscribeSubject SessionSettings
                -> WorkflowOutput
            SubscribeSubject RngSeed => #8
            #7, #8 -> Bonsai.Numerics.Permutation
            -> MemberSelector(Selector=Trials)
            -> WorkflowOutput
        GroupWorkflow BlockMode => #2
            SubscribeSubject SessionSettings
            -> Take(Count=1)
            -> MemberSelector(Selector=Metadata.TrialOrder)
            -> MemberSelector(Selector=Mode) => #3
            Annotation BlockMode(Text="") => #4
            #3, #4 -> Equal(Operand=WorkflowProperty<AutomaticGenerators.TrialOrderMode>(Value=Block))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> SelectMany BuildTrials
                SubscribeSubject SessionSettings
                -> Take(Count=1)
                -> BuildTrialsFromBlock(Random="")
                -> WorkflowOutput
            -> WorkflowOutput
        #0, #1, #2 -> Merge
        -> Take(Count=1)
        -> AsyncSubject TrialList
        -> WorkflowOutput

    BooleanProperty(Value=true)
    -> Bonsai.Shaders.Delay(DueTime=PT2S)
    -> PublishSubject StartExperiment

    Bonsai.Shaders.UpdateFrame
    -> MemberSelector(Selector=TimeStep.ElapsedRealTime) => #20
    DoubleProperty(Value=0) => #21
    #20, #21 -> Merge
    -> Accumulate
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> BehaviorSubject CurrentTimeInSession

Annotation(Text="")
-> GroupWorkflow Logging
    SubscribeSubject SessionSettings
    -> Format(Format={0}/{1}, Selector="Metadata.RootPath,Metadata.AnimalId")
    -> Take(Count=1)
    -> Timestamp
    -> Format(Format={0}/{1:yyyy-MM-ddTHH-mm-ss}, Selector="Value,Timestamp.UtcDateTime")
    -> AsyncSubject SessionRootPath

    GroupWorkflow LogFrameEvents
        GroupWorkflow TimestampLogger
            SubscribeSubject LogFrameEvent => #0
            SubscribeSubject RenderFrameEvent
            -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
            -> Accumulate
            -> ElementIndex
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #5
              Expression:
                new(
                Index as Index,
                Value as Time)
            #0, #5 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1 as EventName,
                Item2 as Frame)
            -> PublishSubject FrameEventLogger
            -> WorkflowOutput

        Annotation(Text="List of all events to be logged using frame number")
        -> GroupWorkflow ListFrameEvents
            SubscribeSubject LickEvent
            -> StringProperty(Value=Lick)
            -> MulticastSubject LogFrameEvent

            SubscribeSubject GiveReward
            -> StringProperty(Value=Reward)
            -> MulticastSubject LogFrameEvent

            SubscribeSubject GiveOptoStim
            -> StringProperty(Value=OptoStim)
            -> MulticastSubject LogFrameEvent

            SubscribeSubject TeleportTo
            -> StringProperty(Value=Teleport)
            -> MulticastSubject LogFrameEvent

            SubscribeSubject WallVisibilityEvent
            -> StringProperty(Value=WallVisibility)
            -> MulticastSubject LogFrameEvent

            SubscribeSubject LogFrameEvent
            -> WorkflowOutput

    Disable GroupWorkflow Loggers
        SubscribeSubject AI_Data
        -> IncludeWorkflow(Path=Extensions\LoggerBlob.bonsai, FileName=AnalogInput.bin)

        SubscribeSubject DI_Data
        -> IncludeWorkflow(Path=Extensions\LoggerBlob.bonsai, FileName=DigitalInput.bin)

        SubscribeSubject RotaryEncoderPosition
        -> IncludeWorkflow(Path=Extensions\LoggerCsv.bonsai, FileName=RotaryEncoder.csv)

        SubscribeSubject CurrentPosition
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it.Z as Position)
        -> IncludeWorkflow(Path=Extensions\LoggerCsv.bonsai, FileName=VrPosition.csv)

        SubscribeSubject FrameEventLogger
        -> IncludeWorkflow(Path=Extensions\LoggerCsv.bonsai, FileName=FrameEvents.csv)

GroupWorkflow RenderConfig
    Bonsai.Shaders.CreateWindow
      Width=500
      Height=500
      VSync=On
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=false
      Location=nil
      WindowBorder=Resizable
      WindowState=Fullscreen
      DisplayDevice=First
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Resources.LoadResources
    -> WorkflowOutput

    IncludeWorkflow(Path=Extensions\ScreenCalibration.bonsai, IntrinsicsFileName=Calibration\left_intrinsics.yml, ExtrinsicsFileName=Calibration\left_extrinsics.yml)
    -> Take(Count=1) => #5
    IncludeWorkflow(Path=Extensions\ScreenCalibration.bonsai, IntrinsicsFileName=Calibration\right_intrinsics.yml, ExtrinsicsFileName=Calibration\right_extrinsics.yml)
    -> Take(Count=1) => #7
    #5, #7 -> Merge
    -> ToArray
    -> AsyncSubject ScreenCalibrationSettings

    Bonsai.Shaders.RenderFrame => #11
    SubscribeSubject StartExperiment => #12
    #11, #12 -> SubscribeWhen
    -> PublishSubject RenderFrameEvent
    -> IncludeWorkflow(Path=BonVision:Environment.CubemapView.bonsai, Eye(X=0, Y=0, Z=0), NearClip=1E-05, FarClip=1, Light(X=0, Y=0, Z=0))
    -> PublishSubject Draw3DStim
    -> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=DimGray, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear)
    -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=0.543744, Height=0.302616, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=0.1))
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=1, Height=1)
    -> PublishSubject PostDrawing

    GroupWorkflow SyncQuad
        SubscribeSubject PostDrawing
        -> Int64Property(Value=1)
        -> Accumulate
        -> Mod(Operand=WorkflowProperty<System.Int64>(Value=2))
        -> Bonsai.Shaders.UpdateRenderState(RenderState="")
        -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #5
        -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-8, Right=8, Bottom=-4.5, Top=4.5) => #6
        #5 -> PropertyMapping(ColorR, ColorG, ColorB) => #7
        #6, #7 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawQuad.bonsai
          ExtentX=0.2
          ExtentY=0.2
          LocationX=-0.5
          LocationY=4
          Layer=10
          Angle=0
          ColorR=0
          ColorG=0
          ColorB=0
          ColorA=1
        -> WorkflowOutput
-> WorkflowOutput

GroupWorkflow Hardware
    GroupWorkflow NIDAQ
        GroupWorkflow AnalogOutput
            ExternalizedMapping(Value(DisplayName=SamplingRate))
            -> IntProperty(Value=30000) => #1
            ExternalizedMapping(Value(DisplayName=BufferSize))
            -> IntProperty(Value=3000) => #3
            #1, #3 -> Zip
            -> Take(Count=1)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                it.Item1 as SamplingRate,
                it.Item2 as BufferSize,
                it.Item1 / it.Item2 as NumBuffersPerSecond)
            -> AsyncSubject AO_Settings

            SubscribeSubject AO_Settings
            -> PropertyMapping(SampleRate(Selector=SamplingRate), BufferLength(Selector=BufferSize))
            -> Bonsai.Dsp.FunctionGenerator(BufferLength=3000, Frequency=50, Waveform=Square, SampleRate=30000, Depth=U8, Amplitude=1, Offset=0, Phase=0)
            -> PublishSubject AO_Clock

            SubscribeSubject AO_Generation => #12
            SubscribeSubject AO_Settings
            -> PropertyMapping(SampleRate(Selector=SamplingRate), BufferSize(Selector=BufferSize)) => #14
            #12, #14 -> Bonsai.DAQmx.AnalogOutput
              SignalSource=""
              SampleRate=30000
              ActiveEdge=Rising
              SampleMode=ContinuousSamples
              BufferSize=3000
              Channels(AnalogOutputChannelConfiguration(ChannelName=OptoStim, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ao0, VoltageUnits=Volts))

            IncludeWorkflow(Path=Extensions\PulseGenerator.bonsai, SampleRate=1000, Frequency=5, Amplitude=1, WaveDuration=1, PulseDuration=0.02)
            -> Take(Count=1) => #17
            IncludeWorkflow(Path=Extensions\PulseGenerator.bonsai, SampleRate=1000, Frequency=10, Amplitude=1, WaveDuration=1, PulseDuration=0.02)
            -> Take(Count=1) => #19
            #17, #19 -> Concat
            -> ToArray
            -> AsyncSubject OptoWaveformBank

            GroupWorkflow OptoStimWaveform
                Defer Constant => #0
                    SubscribeSubject AO_Clock => #0
                    SubscribeSubject AO_Settings => #1
                    -> MemberSelector(Selector=BufferSize) => #2
                    #1 -> IntProperty(Value=1) => #3
                    #2, #3 -> Zip
                    -> PropertyMapping(Size(Selector="it.Item1, it.Item2")) => #5
                    #0, #5 -> Bonsai.Dsp.ScalarBuffer(Size(Width=3000, Height=1), Depth=F32, Channels=1, Value(Val0=0, Val1=0, Val2=0, Val3=0))
                    -> WorkflowOutput
                PublishSubject<System.Int32> GiveOptoStim => #1
                #0, #1 -> TakeUntil => #2
                SubscribeSubject GiveOptoStim
                -> InputMapping(StimId(Selector=it))
                -> SelectMany PlayWaveform => #5
                    SubscribeSubject OptoWaveformBank => #0
                    ExternalizedMapping(Value(DisplayName=StimId)) => #1
                    #0, #1 -> Index(Operand=IntProperty(Value=0))
                    -> Take(Count=1)
                    -> AsyncSubject ThisWaveform

                    Annotation
                      Text: The idea of this workflow is to check how many times the incoming stored waveform "fits" inside each of the Clock buffers. Next, we round it up, and pad the remaining pixels with 0 using the IplImage operator.
                    -> GroupWorkflow PadWaveform
                        SubscribeSubject ThisWaveform => #0
                        SubscribeSubject ThisWaveform
                        -> MemberSelector(Selector=Size.Width) => #2
                        SubscribeSubject AO_Settings
                        -> MemberSelector(Selector=BufferSize) => #4
                        #2, #4 -> Zip
                        -> Bonsai.Scripting.Expressions.ExpressionTransform PaddingSize => #6
                          Expression: Convert.ToInt32(Math.Ceiling((Item1 *1.0) / Item2)) * Item2
                        SubscribeSubject ThisWaveform
                        -> MemberSelector(Selector=Size.Height) => #8
                        #6, #8 -> Zip
                        -> PropertyMapping(Size(Selector="Item1, Item2")) => #10
                        #0, #10 -> Bonsai.Vision.ResizeCanvas(Size(Width=3000, Height=1), BorderType=Constant, FillValue(Val0=0, Val1=0, Val2=0, Val3=0), Offset(X=0, Y=0))
                        -> Bonsai.Dsp.ConvertToMat
                        -> Take(Count=1)
                        -> AsyncSubject PaddedWaveform
                        -> WorkflowOutput

                    SubscribeSubject PaddedWaveform => #7
                    SubscribeSubject AO_Settings
                    -> MemberSelector(Selector=BufferSize) => #9
                    #7, #9 -> WithLatestFrom
                    -> MemberSelector(Selector=Item1) => #11
                    SubscribeSubject AO_Settings
                    -> PropertyMapping(Count(Selector=BufferSize), Skip(Selector=BufferSize)) => #13
                    #11, #13 -> Bonsai.Dsp.Buffer(Count=3000, Skip=3000) => #14
                    SubscribeSubject AO_Clock => #15
                    #14, #15 -> Zip
                    -> MemberSelector(Selector=Item1)
                    -> WorkflowOutput
                #2, #5 -> Concat
                -> Repeat
                -> WorkflowOutput
            -> BehaviorSubject AO_Generation

        GroupWorkflow AnalogInput
            ExternalizedMapping(Value(DisplayName=SamplingRate))
            -> IntProperty(Value=1000) => #1
            ExternalizedMapping(Value(DisplayName=BufferSize))
            -> IntProperty(Value=10) => #3
            #1, #3 -> Zip
            -> Take(Count=1)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                it.Item1 as SamplingRate,
                it.Item2 as BufferSize,
                it.Item1 / it.Item2 as NumBuffersPerSecond)
            -> AsyncSubject AI_Settings

            SubscribeSubject AI_Settings
            -> MemberSelector(Selector=SamplingRate)
            -> PropertyMapping(SampleRate) => #10
            SubscribeSubject AI_Settings
            -> MemberSelector(Selector=BufferSize)
            -> PropertyMapping(BufferSize) => #13
            #10, #13 -> Bonsai.DAQmx.AnalogInputTriggered
              SignalSource=""
              DigitalTriggerSource=di/StartTrigger
              SampleRate=1000
              ActiveEdge=Rising
              SampleMode=ContinuousSamples
              BufferSize=10
              SamplesPerChannel=nil
              Channels
                AnalogInputChannelConfiguration(ChannelName=LickDetector, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ai1, TerminalConfiguration=Differential, VoltageUnits=Volts)
                AnalogInputChannelConfiguration(ChannelName=Photostimulation, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ai6, TerminalConfiguration=Differential, VoltageUnits=Volts)
                AnalogInputChannelConfiguration(ChannelName=Photodiode, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ai5, TerminalConfiguration=Differential, VoltageUnits=Volts)
            -> PublishSubject AI_Data

        GroupWorkflow DigitalInput
            ExternalizedMapping(Value(DisplayName=SamplingRate))
            -> IntProperty(Value=3000) => #1
            ExternalizedMapping(Value(DisplayName=BufferSize))
            -> IntProperty(Value=100) => #3
            #1, #3 -> Zip
            -> Take(Count=1)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                it.Item1 as SamplingRate,
                it.Item2 as BufferSize,
                it.Item1 / it.Item2 as NumBuffersPerSecond)
            -> AsyncSubject DI_Settings

            SubscribeSubject DI_Settings
            -> MemberSelector(Selector=SamplingRate)
            -> PropertyMapping(SampleRate) => #10
            SubscribeSubject DI_Settings
            -> MemberSelector(Selector=BufferSize)
            -> PropertyMapping(BufferSize) => #13
            #10, #13 -> Bonsai.DAQmx.DigitalInput
              SignalSource=""
              SampleRate=3000
              ActiveEdge=Rising
              SampleMode=ContinuousSamples
              BufferSize=100
              SamplesPerChannel=nil
              Channels(DigitalInputChannelConfiguration(ChannelName=DigitalInputs, Grouping=OneChannelForAllLines, Lines=Dev1/port0/line0:7))
            -> Bonsai.Shaders.DelaySubscription(DueTime=PT0.2S)
            -> PublishSubject DI_Data

        GroupWorkflow PwmGenerator => #3
            SubscribeSubject CameraFPS
            -> PropertyMapping(Frequency)
            -> Bonsai.DAQmx.CounterOutput(Channel=Dev1/ctr0, TriggerSource="", Frequency=50, DutyCycle=0.5, NumberOfSamples=nil)
            -> IntProperty(Value=0)
            -> WorkflowOutput
        SubscribeSubject StartExperiment => #4
        #3, #4 -> SubscribeWhen

        GroupWorkflow RotaryEncoder
            SubscribeSubject RenderFrameEvent
            -> ElementIndex => #1
            -> MemberSelector(Selector=Value.TimeStep.ElapsedRealTime)
            -> Accumulate => #3
            -> Bonsai.DAQmx.RotaryEncoderInput(Channel=Dev1/ctr1, DecoderType=X1, TicksPerRevolution=1000, StartingRadians=0, ResetOnZ=false) => #4
            #1 -> MemberSelector(Selector=Index) => #5
            #4, #5, #3 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1 as RotaryEncoder,
                Item2 as FrameIndex,
                Item3 as RenderElapsedTime)
            -> PublishSubject RotaryEncoderPosition
            -> WorkflowOutput

        GroupWorkflow RewardDelivery
            BehaviorSubject<System.Single> GiveReward => #0
            SubscribeSubject SessionSettings
            -> MemberSelector(Selector=Metadata.RewardCalibration) => #2
            #0, #2 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform CalibrateValue
              Expression: Item1 * Item2.Intercept + Item2.Slope
            -> Bonsai.Dsp.Rescale(Min=0.0001, Max=0.9999, RangeMin=0.0001, RangeMax=0.9999, RescaleType=Clamp)
            -> InputMapping(HighTime(Selector=it))
            -> CreateObservable GiveReward
                ExternalizedMapping(InitialDelay, LowTime, HighTime, NumberOfPulses, Channel)
                -> Bonsai.DAQmx.PulseOutput(Channel=Dev1/ctr3, InitialDelay=0, LowTime=0.1, HighTime=0.01, NumberOfPulses=1)
                -> WorkflowOutput
            -> Concat
            -> WorkflowOutput

    GroupWorkflow Cameras
        IntProperty(Value=50)
        -> Take(Count=1)
        -> AsyncSubject CameraFPS

    GroupWorkflow PostProcessing
        GroupWorkflow LickSensor
            SubscribeSubject AI_Data
            -> Bonsai.Dsp.SelectChannels(Channels(int=0))
            -> PublishSubject LickSensor

            SubscribeSubject LickSensor
            -> Bonsai.Dsp.ConvertScale(Depth=F32, Scale=1, Shift=0)
            -> Bonsai.Dsp.Threshold(ThresholdValue=1, MaxValue=1, ThresholdType=Binary)
            -> Bonsai.Dsp.ConvertToArray(Depth=nil)
            -> Merge
            -> GreaterThan(Operand=WorkflowProperty<System.Byte>(Value=0))
            -> DistinctUntilChanged
            -> Condition => #10
                WorkflowInput Source1
                -> WorkflowOutput
            Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.06S) => #11
            #10, #11 -> Gate
            -> PublishSubject LickEvent

GroupWorkflow PositionUpdates
    FloatProperty(Value=0)
    -> Take(Count=1) => #1
    Bonsai.Shaders.Input.KeyDown(Key=F2, Modifiers=nil)
    -> FloatProperty(Value=0) => #3
    BehaviorSubject<System.Single> TeleportTo => #4
    #1, #3, #4 -> Merge => #5
    ExternalizedMapping(PositionMax, PositionMin) => #6
    #5, #6 -> CreateObservable ResetPosition
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject TeleportPosition

        ExternalizedMapping(Value(DisplayName=PositionMin))
        -> FloatProperty(Value=-0.5) => #4
        ExternalizedMapping(Value(DisplayName=PositionMax))
        -> FloatProperty(Value=7) => #6
        #4, #6 -> CombineLatest
        -> BehaviorSubject PositionBounds

        SubscribeSubject TeleportPosition
        -> Take(Count=1) => #10
        SubscribeSubject DisplacementUpdate => #11
        SubscribeSubject TeleportPosition => #12
        #11, #12 -> Scan => #13
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Accumulation) => #1
            #0 -> MemberSelector(Selector=Value) => #2
            #1, #2 -> Zip
            -> Add => #4
            SubscribeSubject PositionBounds => #5
            #4, #5 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #7
              Expression: it.Item1 < it.Item2.Item1 ? it.Item2.Item1 : (it.Item1 > it.Item2.Item2 ? it.Item2.Item2 : it.Item1)
            #7, #4 -> Zip
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        #10, #13 -> Concat
        -> WorkflowOutput
    -> Switch
    -> InputMapping(Z(Selector=it)) => #9
    ExternalizedMapping(Y(DisplayName=DefaultY), X(DisplayName=DefaultX)) => #10
    #9, #10 -> Bonsai.Shaders.CreateVector3(X=0, Y=0.2, Z=4.45000267)
    -> BehaviorSubject CurrentPosition

    BooleanProperty(Value=true)
    -> BehaviorSubject EnableDisplacementUpdates

    SubscribeSubject RotaryEncoderPosition
    -> MemberSelector(Selector=RotaryEncoder)
    -> Bonsai.Dsp.Difference(Order=1) => #17
    SubscribeSubject DefaultEncoderGain
    -> PropertyMapping(Value) => #19
    #17, #19 -> Multiply(Operand=FloatProperty(Value=0.001)) => #20
    Disable Bonsai.Shaders.Input.MouseWheel
    -> Disable MemberSelector(Selector=EventArgs.DeltaPrecise)
    -> Disable Multiply(Operand=FloatProperty(Value=0.05)) => #23
    #20, #23 -> Disable Merge
    -> Condition EnableUpdates
        SubscribeSubject EnableDisplacementUpdates
        -> WorkflowOutput
    -> InputMapping(Value(Selector=it))
    -> FloatProperty(Value=0) => #27
    Bonsai.Shaders.UpdateFrame => #28
    BehaviorSubject<System.Single> PassiveUpdateGain
    -> PropertyMapping(Value) => #30
    #28, #30 -> FloatProperty(Value=0) => #31
    #27, #31 -> Merge
    -> PublishSubject DisplacementUpdate

Annotation(Text="")
-> GroupWorkflow TrialLogic => #8
    ExternalizedMapping(Value(DisplayName=CorridorHeight))
    -> FloatProperty(Value=0.5) => #1
    ExternalizedMapping(Value(DisplayName=CorridorWidth))
    -> FloatProperty(Value=1) => #3
    #1, #3 -> CombineLatest
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        it.Item1 as Height,
        it.Item2 as Width,
        it.Item1 * 0.5 as HeightOffset,
        it.Item2 * 0.5 as WidthOffset)
    -> Take(Count=1)
    -> AsyncSubject CorridorSpecs

    SubscribeSubject TrialList
    -> Merge
    -> CreateObservable CreateTrial
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject ThisTrial

        GroupWorkflow Trial
            PublishSubject<System.Reactive.Unit> EndTrial
            -> Take(Count=1)
            -> WorkflowOutput

            GroupWorkflow DrawTrial
                Annotation DrawFloors(Text="")
                -> SubscribeSubject ThisTrial
                -> MemberSelector(Selector=FloorSegments)
                -> Merge
                -> IncludeWorkflow(Path=Extensions\DrawFloorSegment.bonsai)
                -> Merge

                Annotation DrawSegments(Text="")
                -> SubscribeSubject ThisTrial
                -> MemberSelector(Selector=CorridorSegments)
                -> Merge => #9
                -> GroupWorkflow DrawSegment
                    WorkflowInput Source1
                    -> CreateObservable DrawSegment
                        WorkflowInput Source1
                        -> Take(Count=1)
                        -> AsyncSubject SegmentSpecs

                        GroupWorkflow SegmentEvents
                            SubscribeSubject CorridorSpecs => #0
                            SubscribeSubject SegmentSpecs => #1
                            SubscribeSubject CurrentPosition => #2
                            #0, #1, #2 -> CombineLatest
                            -> Bonsai.Scripting.Expressions.ExpressionTransform => #4
                              Expression:
                                new(
                                it.Item1 as CorridorSpecs,
                                it.Item2 as SegmentSpecs,
                                it.Item3 as CurrentPosition)
                            -> MemberSelector(Selector=SegmentSpecs.Name) => #5
                            #4 -> GroupWorkflow SegmentCalculations => #6
                                WorkflowInput Source1 => #0
                                -> MemberSelector(Selector="CurrentPosition.Z,SegmentSpecs.PositionStart")
                                -> GreaterThanOrEqual => #2
                                #0 -> MemberSelector(Selector="CurrentPosition.Z,SegmentSpecs.PositionEnd")
                                -> LessThan => #4
                                #2, #4 -> Zip
                                -> BitwiseAnd => #6
                                #0 -> MemberSelector(Selector="CurrentPosition.Z,SegmentSpecs.PositionStart")
                                -> Subtract => #8
                                #6, #8 -> Zip
                                -> Bonsai.Scripting.Expressions.ExpressionTransform
                                  Expression:
                                    new(
                                    it.Item1 as InSegment,
                                    it.Item2 as RelativeSegmentPosition)
                                -> WorkflowOutput
                            #5, #4, #6 -> Zip
                            -> Bonsai.Scripting.Expressions.ExpressionTransform
                              Expression:
                                new(
                                it.Item1 as Name,
                                it.Item2 as Segment,
                                it.Item3 as SegmentMetrics)
                            -> WorkflowOutput
                        -> WorkflowOutput

                        GroupWorkflow Render
                            GroupWorkflow DrawLeftWall
                                SubscribeSubject Draw3DStim => #0
                                SubscribeSubject CorridorSpecs
                                -> MemberSelector(Selector=WidthOffset)
                                -> Multiply(Operand=DoubleProperty(Value=-1)) => #3
                                SubscribeSubject CorridorSpecs => #4
                                SubscribeSubject SegmentSpecs => #5
                                SubscribeSubject SegmentSpecs
                                -> Bonsai.Scripting.Expressions.ExpressionTransform => #7
                                  Expression:
                                    new(
                                    (it.PositionEnd - it.PositionStart) as Length,
                                    0.5 * (it.PositionEnd - it.PositionStart) + it.PositionStart  as Center)
                                #0, #3, #4, #5, #7 -> CombineLatest
                                -> Bonsai.Scripting.Expressions.ExpressionTransform => #9
                                  Expression:
                                    new(
                                    it.Item1 as Draw,
                                    it.Item2 as WidthOffset,
                                    it.Item3 as CorridorSpecs,
                                    it.Item4 as SegmentSpecs,
                                    it.Item5 as PostSegmentSpecs)
                                SubscribeSubject VisibilityLeft => #10
                                #9, #10 -> WithLatestFrom
                                -> Condition IsVisible?
                                    WorkflowInput Source1
                                    -> MemberSelector(Selector=Item2)
                                    -> WorkflowOutput
                                -> MemberSelector(Selector=Item1) => #13
                                -> MemberSelector(Selector=Draw)
                                -> IncludeWorkflow(Path=Extensions\TranslateView.bonsai, PositionVec3=CurrentPosition) => #15
                                #15, #13 -> Zip => #16
                                -> GroupWorkflow BindTexture => #17
                                    WorkflowInput Source1 => #0
                                    SubscribeSubject Textures
                                    -> MemberSelector(Selector=Left) => #2
                                    #0, #2 -> WithLatestFrom
                                    -> MemberSelector(Selector=Item2)
                                    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="", TextureTarget=Texture2D)
                                    -> WorkflowOutput
                                #17, #16 -> Zip
                                -> MemberSelector(Selector=Item2)
                                -> InputMapping
                                  Selector=Item1
                                  TranslationZ(Selector=Item2.PostSegmentSpecs.Center)
                                  TranslationX(Selector=Item2.WidthOffset)
                                  TranslationY(Selector=Item2.CorridorSpecs.HeightOffset)
                                  ScaleY(Selector=Item2.CorridorSpecs.Height)
                                  ScaleX(Selector=Item2.PostSegmentSpecs.Length)
                                -> IncludeWorkflow
                                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                                  TranslationX=-0.5
                                  TranslationY=0.25
                                  TranslationZ=4.75
                                  RotationZ=0
                                  RotationY=90
                                  RotationX=0
                                  ScaleX=0.5
                                  ScaleY=0.5
                                  ScaleZ=1
                                  Ambient(X=1, Y=1, Z=1)
                                  Diffuse(X=0, Y=0, Z=0)
                                  Specular(X=0, Y=0, Z=0)
                                  SpecularExponent=1
                                  MeshName=Plane
                                -> WorkflowOutput

                            GroupWorkflow DrawRightWall
                                SubscribeSubject Draw3DStim => #0
                                SubscribeSubject CorridorSpecs
                                -> MemberSelector(Selector=WidthOffset)
                                -> Multiply(Operand=DoubleProperty(Value=1)) => #3
                                SubscribeSubject CorridorSpecs => #4
                                SubscribeSubject SegmentSpecs => #5
                                SubscribeSubject SegmentSpecs
                                -> Bonsai.Scripting.Expressions.ExpressionTransform => #7
                                  Expression:
                                    new(
                                    (it.PositionEnd - it.PositionStart) as Length,
                                    0.5 * (it.PositionEnd - it.PositionStart) + it.PositionStart  as Center)
                                #0, #3, #4, #5, #7 -> CombineLatest
                                -> Bonsai.Scripting.Expressions.ExpressionTransform => #9
                                  Expression:
                                    new(
                                    it.Item1 as Draw,
                                    it.Item2 as WidthOffset,
                                    it.Item3 as CorridorSpecs,
                                    it.Item4 as SegmentSpecs,
                                    it.Item5 as PostSegmentSpecs)
                                SubscribeSubject VisibilityRight => #10
                                #9, #10 -> WithLatestFrom
                                -> Condition IsVisible?
                                    WorkflowInput Source1
                                    -> MemberSelector(Selector=Item2)
                                    -> WorkflowOutput
                                -> MemberSelector(Selector=Item1) => #13
                                -> MemberSelector(Selector=Draw)
                                -> IncludeWorkflow(Path=Extensions\TranslateView.bonsai, PositionVec3=CurrentPosition) => #15
                                #15, #13 -> Zip => #16
                                -> GroupWorkflow BindTexture => #17
                                    WorkflowInput Source1 => #0
                                    SubscribeSubject Textures
                                    -> MemberSelector(Selector=Right) => #2
                                    #0, #2 -> WithLatestFrom
                                    -> MemberSelector(Selector=Item2)
                                    -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureName="", TextureTarget=Texture2D)
                                    -> WorkflowOutput
                                #17, #16 -> Zip
                                -> MemberSelector(Selector=Item2)
                                -> InputMapping
                                  Selector=Item1
                                  TranslationZ(Selector=Item2.PostSegmentSpecs.Center)
                                  TranslationX(Selector=Item2.WidthOffset)
                                  TranslationY(Selector=Item2.CorridorSpecs.HeightOffset)
                                  ScaleY(Selector=Item2.CorridorSpecs.Height)
                                  ScaleX(Selector=Item2.PostSegmentSpecs.Length)
                                -> IncludeWorkflow
                                  Path=BonVision:Primitives.DrawTexturedModel.bonsai
                                  TranslationX=0.5
                                  TranslationY=0.25
                                  TranslationZ=4.75
                                  RotationZ=0
                                  RotationY=90
                                  RotationX=0
                                  ScaleX=0.5
                                  ScaleY=0.5
                                  ScaleZ=1
                                  Ambient(X=1, Y=1, Z=1)
                                  Diffuse(X=0, Y=0, Z=0)
                                  Specular(X=0, Y=0, Z=0)
                                  SpecularExponent=1
                                  MeshName=Plane
                                -> WorkflowOutput

                            GroupWorkflow LoadDefaultTextures
                                SubscribeSubject SegmentSpecs
                                -> InputMapping(FileName(Selector=TextureLeft))
                                -> Bonsai.Shaders.LoadImage => #2
                                  Width=nil
                                  Height=nil
                                  InternalFormat=Rgba
                                  WrapS=Repeat
                                  WrapT=Repeat
                                  MinFilter=Linear
                                  MagFilter=Linear
                                  FileName=Assets\\Textures\\CamiloReward.jpg
                                  ColorType=Unchanged
                                  FlipMode=Vertical
                                SubscribeSubject SegmentSpecs
                                -> InputMapping(FileName(Selector=TextureRight))
                                -> Bonsai.Shaders.LoadImage => #5
                                  Width=nil
                                  Height=nil
                                  InternalFormat=Rgba
                                  WrapS=Repeat
                                  WrapT=Repeat
                                  MinFilter=Linear
                                  MagFilter=Linear
                                  FileName=Assets\\Textures\\CamiloReward.jpg
                                  ColorType=Unchanged
                                  FlipMode=Vertical
                                #2, #5 -> Zip
                                -> Bonsai.Scripting.Expressions.ExpressionTransform
                                  Expression: new(Item1 as Left, Item2 as Right)
                                -> Take(Count=1)
                                -> AsyncSubject Textures
                                -> WorkflowOutput

                            GroupWorkflow LoadStimuliTextures => #3
                                SubscribeSubject SegmentSpecs
                                -> MemberSelector(Selector=StimControl)
                                -> InputMapping(FileName(Selector=StimTextureLeft))
                                -> Bonsai.Shaders.LoadImage => #3
                                  Width=nil
                                  Height=nil
                                  InternalFormat=Rgba
                                  WrapS=Repeat
                                  WrapT=Repeat
                                  MinFilter=Linear
                                  MagFilter=Linear
                                  FileName=Assets\\Textures\\CamiloReward.jpg
                                  ColorType=Unchanged
                                  FlipMode=Vertical
                                SubscribeSubject SegmentSpecs
                                -> MemberSelector(Selector=StimControl)
                                -> InputMapping(FileName(Selector=StimTextureRight))
                                -> Bonsai.Shaders.LoadImage => #7
                                  Width=nil
                                  Height=nil
                                  InternalFormat=Rgba
                                  WrapS=Repeat
                                  WrapT=Repeat
                                  MinFilter=Linear
                                  MagFilter=Linear
                                  FileName=Assets\\Textures\\CamiloReward.jpg
                                  ColorType=Unchanged
                                  FlipMode=Vertical
                                #3, #7 -> Zip
                                -> Bonsai.Scripting.Expressions.ExpressionTransform
                                  Expression: new(Item1 as Left, Item2 as Right)
                                -> Take(Count=1)
                                -> AsyncSubject StimTextures
                                -> WorkflowOutput
                            SubscribeSubject SegmentSpecs
                            -> MemberSelector(Selector=StimControl)
                            -> Condition => #6
                                WorkflowInput Source1
                                -> Bonsai.Scripting.Expressions.ExpressionTransform
                                  Expression: it == null
                                -> BitwiseNot
                                -> WorkflowOutput
                            #3, #6 -> SubscribeWhen

                        GroupWorkflow StimControl
                            SubscribeSubject SegmentSpecs
                            -> MemberSelector(Selector=InitialVisibility)
                            -> BehaviorSubject VisibilityLeft
                            -> BehaviorSubject VisibilityRight

                            GroupWorkflow SetWallStim => #4
                                SubscribeSubject CurrentPosition => #0
                                SubscribeSubject SegmentSpecs => #1
                                #0, #1 -> WithLatestFrom
                                -> MemberSelector(Selector="Item1.Z,Item2.StimControl.Location")
                                -> GreaterThan
                                -> Condition
                                    WorkflowInput Source1
                                    -> WorkflowOutput
                                -> Take(Count=1) => #6
                                SubscribeSubject SegmentSpecs
                                -> MemberSelector(Selector=StimControl.Delay)
                                -> Bonsai.Scripting.Expressions.ExpressionTransform
                                  Expression: TimeSpan.FromSeconds(it)
                                -> PropertyMapping(DueTime) => #10
                                #6, #10 -> Bonsai.Shaders.Delay(DueTime=PT0S)
                                -> MulticastSubject WallVisibilityEvent
                                -> SelectMany WriteWallState
                                    SubscribeSubject SegmentSpecs
                                    -> MemberSelector(Selector=StimControl.LeftValue)
                                    -> MulticastSubject VisibilityLeft => #2
                                    SubscribeSubject SegmentSpecs
                                    -> MemberSelector(Selector=StimControl.RightValue)
                                    -> MulticastSubject VisibilityRight => #5
                                    #2, #5 -> Zip
                                    -> Take(Count=1)
                                    -> WorkflowOutput
                                -> Take(Count=1)
                                -> WorkflowOutput
                            SubscribeSubject SegmentSpecs
                            -> MemberSelector(Selector=StimControl)
                            -> Condition => #7
                                WorkflowInput Source1
                                -> Bonsai.Scripting.Expressions.ExpressionTransform
                                  Expression: it == null
                                -> BitwiseNot
                                -> WorkflowOutput
                            #4, #7 -> SubscribeWhen
                    -> WorkflowOutput
                #9 -> IncludeWorkflow(Path=Extensions\DrawSegment.bonsai)
                -> ReplaySubject TrialSegments(BufferSize=nil)
                -> Count
                -> AsyncSubject NumberOfSegments

                SubscribeSubject TrialSegments
                -> Merge
                -> BehaviorSubject SegmentEvents

            GroupWorkflow TrialLogic
                SubscribeSubject ThisTrial
                -> MemberSelector(Selector=Teleport)
                -> Merge
                -> IncludeWorkflow(Path=Extensions\Teleport.bonsai)
                -> Merge
                -> Unit
                -> MulticastSubject EndTrial

                SubscribeSubject ThisTrial
                -> MemberSelector(Selector=PassiveMode)
                -> Merge
                -> IncludeWorkflow(Path=Extensions\ControlPassiveGain.bonsai)
                -> Merge

                SubscribeSubject ThisTrial
                -> MemberSelector(Selector=Reward)
                -> Merge
                -> IncludeWorkflow(Path=Extensions\Reward.bonsai)
                -> Merge

                SubscribeSubject ThisTrial
                -> MemberSelector(Selector=OptoStim)
                -> Merge
                -> IncludeWorkflow(Path=Extensions\OptoStim.bonsai)
                -> Merge

                SubscribeSubject ThisTrial
                -> MemberSelector(Selector=TeleportOnLick)
                -> Merge
                -> IncludeWorkflow(Path=Extensions\TeleportOnLick.bonsai)
                -> Merge
        -> GroupWorkflow ResetState
            WorkflowInput Source1
            -> FloatProperty(Value=0)
            -> MulticastSubject PassiveUpdateGain
            -> WorkflowOutput
        -> Take(Count=1)
        -> WorkflowOutput

        SubscribeSubject ThisTrial
        -> MulticastSubject CurrentTrial
    -> Concat
SubscribeSubject StartExperiment
-> Bonsai.Shaders.Delay(DueTime=PT1S) => #10
#8, #10 -> SubscribeWhen

Annotation(Text="")
-> GroupWorkflow Visualizers
    SubscribeSubject FrameEventLogger => #0
    -> Condition Lick
        WorkflowInput Source1
        -> MemberSelector(Selector=EventName) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=StringProperty(Value=Lick))
        -> WorkflowOutput
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
      Expression:
        new(
        Double.NaN as Reward,
        1.0 as Lick,
        Double.NaN as OptoStim,
        Double.NaN as Telepoprt,
        Double.NaN as WallVisibility,
        Frame.Time as Time
        )
    #0 -> Condition Reward
        WorkflowInput Source1
        -> MemberSelector(Selector=EventName) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=StringProperty(Value=Reward))
        -> WorkflowOutput
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #4
      Expression:
        new(
        2.0 as Reward,
        Double.NaN as Lick,
        Double.NaN as OptoStim,
        Double.NaN as Telepoprt,
        Double.NaN as WallVisibility,
        Frame.Time as Time
        )
    #0 -> Condition OptoStim
        WorkflowInput Source1
        -> MemberSelector(Selector=EventName) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=StringProperty(Value=OptoStim))
        -> WorkflowOutput
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #6
      Expression:
        new(
        Double.NaN as Reward,
        Double.NaN as Lick,
        3.0 as OptoStim,
        Double.NaN as Telepoprt,
        Double.NaN as WallVisibility,
        Frame.Time as Time
        )
    #0 -> Condition Teleport
        WorkflowInput Source1
        -> MemberSelector(Selector=EventName) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=StringProperty(Value=Teleport))
        -> WorkflowOutput
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #8
      Expression:
        new(
        Double.NaN as Reward,
        Double.NaN as Lick,
        Double.NaN as OptoStim,
        4.0 as Telepoprt,
        Double.NaN as WallVisibility,
        Frame.Time as Time
        )
    #0 -> Condition WallVisibility
        WorkflowInput Source1
        -> MemberSelector(Selector=EventName) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=StringProperty(Value=WallVisibility))
        -> WorkflowOutput
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #10
      Expression:
        new(
        Double.NaN as Reward,
        Double.NaN as Lick,
        Double.NaN as OptoStim,
        Double.NaN as Telepoprt,
        5.0 as WallVisibility,
        Frame.Time as Time
        )
    #2, #4, #6, #8, #10 -> Merge
    -> Bonsai.Design.Visualizers.RollingGraphBuilder(IndexSelector=Time, ValueSelector="Lick,Reward,OptoStim,Telepoprt,WallVisibility", SymbolType=Circle, LineWidth=0, Capacity=nil, Min=nil, Max=nil)
    -> VisualizerMapping => #13
    SubscribeSubject FrameEventLogger
    -> VisualizerMapping => #15
    SubscribeSubject RotaryEncoderPosition
    -> MemberSelector(Selector=RotaryEncoder)
    -> Bonsai.Dsp.Difference(Order=1)
    -> VisualizerMapping => #19
    SubscribeSubject CurrentPosition
    -> MemberSelector(Selector=Z)
    -> Bonsai.Dsp.Difference(Order=1)
    -> VisualizerMapping => #23
    SubscribeSubject CurrentPosition
    -> MemberSelector(Selector=Z)
    -> VisualizerMapping => #26
    Bonsai.Video.VideoCaptureDevice(Index=0, CaptureProperties="")
    -> VisualizerMapping => #28
    BehaviorSubject<AutomaticGenerators.Trial> CurrentTrial
    -> MemberSelector(Selector=TrialTypeLabel)
    -> ElementIndex => #31
    SubscribeSubject CurrentTimeInSession => #32
    #31, #32 -> WithLatestFrom
    -> Format(Format="Trial {0}: {1} @ {2}", Selector="Item1.Index,Item1.Value,Item2")
    -> VisualizerMapping => #35
    #13, #15, #19, #23, #26, #28, #35 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=4, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
    -> WorkflowOutput

GroupWorkflow OnlineVariables
    ExternalizedMapping(Value(DisplayName=WheelGain))
    -> FloatProperty(Value=0.001)
    -> Skip(Count=1)
    -> MulticastSubject DefaultEncoderGain
